CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Img>.*)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:original
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:original
    Conversion method:Split
    Image type:Channels
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    Channel count:3
    Channel number:1
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    Image name:GFP
    Channel number:2
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    Image name:r568
    Channel number:3
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    Image name:DAPI

Smooth:[module_num:6|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
    Select the input image:DAPI
    Name the output image:DAPIsmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:32
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:DAPIsmooth
    Name the primary objects to be identified:nucleus
    Typical diameter of objects, in pixel units (Min,Max):100,600
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:DAPI
    Name the output image:EnhancedDAPI
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Slow

MaskImage:[module_num:9|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
    Select the input image:EnhancedDAPI
    Name the output image:MaskedDAPI
    Use objects or an image as a mask?:Objects
    Select object for mask:nucleus
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:MaskedDAPI
    Name the primary objects to be identified:Chromocentres
    Typical diameter of objects, in pixel units (Min,Max):10,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

RelateObjects:[module_num:11|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
    Parent objects:nucleus
    Child objects:Chromocentres
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DAPI
    Name the output image:nuclei_detected
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:yellow
    Select objects to display:nucleus
    Select outline color:red
    Select objects to display:Chromocentres

DisplayDataOnImage:[module_num:13|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
    Display object or image measurements?:Object
    Select the input objects:nucleus
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:nuclei_detected
    Text color:yellow
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:original
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Elsewhere...|C:\\Users\\vernayb\\Desktop\\RESULTS
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
IdentifyTertiaryObjects:[module_num:15|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
    Select the larger identified objects:nucleus
    Select the smaller identified objects:Chromocentres
    Name the tertiary objects to be identified:nucleoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:16|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
    Hidden:3
    Select an image to measure:GFP
    Select an image to measure:DAPI
    Select an image to measure:r568
    Select objects to measure:Chromocentres
    Select objects to measure:nucleoplasm
    Select objects to measure:nucleus

MeasureObjectSizeShape:[module_num:17|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
    Select objects to measure:nucleus
    Select objects to measure:Chromocentres
    Select objects to measure:nucleoplasm
    Calculate the Zernike features?:No

ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\Users\\vernayb\\Desktop\\RESULTS
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Chromocentres|Parent_nucleus,Chromocentres|Number_Object_Number,Chromocentres|Intensity_MassDisplacement_DAPI,Chromocentres|Intensity_MassDisplacement_r568,Chromocentres|Intensity_MassDisplacement_GFP,Chromocentres|Intensity_MinIntensity_DAPI,Chromocentres|Intensity_MinIntensity_r568,Chromocentres|Intensity_MinIntensity_GFP,Chromocentres|Intensity_StdIntensity_DAPI,Chromocentres|Intensity_StdIntensity_r568,Chromocentres|Intensity_StdIntensity_GFP,Chromocentres|Intensity_UpperQuartileIntensity_DAPI,Chromocentres|Intensity_UpperQuartileIntensity_r568,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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